PsychoPy2experiment version="1.85.6"
Settings
  Monitor = testMonitor
  color = black
  Experiment info = {u'participant': u'0', u'run_id': u'0', u'delay': u'mydelay', u'amount': u'myamount', u'timeout': u'0', u'day': u'0'}
  Units = norm
  Save excel file = True
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  Data filename = u'data' + os.sep + '%s_%s' % (expInfo['participant'], expInfo['date'])
  expName = construal_itc_basic2
  logging level = warning
  Screen = 1
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Routines
  Routine blockstart
    TextComponent text
      text = Get ready for the new block!
      stopVal [duration (s)] = .1
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent code
  Routine thanks
    TextComponent thanksText
      color = $[1, 1, 1]
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      font = arial
      letterHeight = 0.1
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      text:
        This is the end of the experiment.

        Thanks!
  Routine itc_trial
    PolygonComponent no_response_poly
      fillColor = $[1,1,1]
      pos = (0, 0.8)
      startVal [condition] = $(False)
      size = (0.5, 0.5)
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    PolygonComponent right_feedback
      fillColor = $[0,1,1]
      pos = (0.5, 0)
      lineWidth = 5
      startVal [condition] = $(False)
      size = (0.3, 0.3)
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    PolygonComponent left_feedback
      fillColor = $[1,1,0]
      pos = (-0.5, 0)
      lineWidth = 5
      startVal [condition] = $(False)
      size = (0.3,0.3)
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    TextComponent Delay1
      text = First Delay
      stopVal [duration (s)] = 1.5
      pos = (-0.8, 0.9)
      ori [set every repeat] = 0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent Delay2
      text = SecondDelay
      stopVal [duration (s)] = 1.5
      pos = (0.8, 0.9)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent Amount1
      text = $expInfo['amount']
      stopVal [duration (s)] = 1.5
      pos = (-0.8, 0.8)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent Amount2
      text = $expInfo['amount']
      stopVal [duration (s)] = 1.5
      pos = (0.8, 0.8)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    PolygonComponent Choice1Background
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 1.5
      pos = (-0.5, 0)
      startVal [time (s)] = 0.0
      size = (0.3, 0.2)
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    PolygonComponent Choice2Background
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 1.5
      pos = (0.5, 0.0)
      startVal [time (s)] = 0.0
      size = (0.3, 0.2)
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    KeyboardComponent resp
      correctAns = "left"
      storeCorrect = True
      stopVal [duration (s)] = 1
      forceEndRoutine = False
      allowedKeys = "left","down","right"
      startVal [time (s)] = 0
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    CodeComponent process_response
      Begin Experiment:
        from itclogic import *

        mystr=confirm_logicfile_access()

        itc_feedback_duration=0.5
        from itclogic import *

        #code for the delay discounting itself
        condition_to_use=choose_condition(expInfo['participant'], expInfo['run_id'], expInfo['day'])
        #condition_to_use=choose_condition(1,1,1)
        #generate from the subject ID, day, and run which to do
      Begin Routine:
        feedback_began=False
        testtextvar="this is set by a var!"
        response_timer=None
        next_ct_printout=1.5
        debugger.text=testtextvar

        def begin_feedback(feedback_obj):
            global response_timer
            global feedback_began
            feedback_began=True
            response_timer = core.CountdownTimer(itc_feedback_duration)
            feedback_obj.setAutoDraw(True)
            feedback_obj.status= STARTED
      Each Frame:
        if resp.status == STARTED:
            if len(theseKeys)>0:
                if 'left' in theseKeys:
                    fb_obj=left_feedback
                elif 'right' in theseKeys:
                    fb_obj=right_feedback
                else:
                    raise Exception("Unhandled response key: " + str(theseKeys))

                if feedback_began==False: #execute on the first frame after a response.
                    begin_feedback(fb_obj)
                    resp.status == FINISHED

        elif resp.status==FINISHED and feedback_began==False:
            #second trigger for ending trial; response time is ended.
            begin_feedback(no_response)
            #

        #execute on first frame after feedback begins
        if response_timer is not None:
            #print out the time left but only on multiples of 0.1
            if response_timer.getTime()<next_ct_printout:
                next_ct_printout=next_ct_printout-0.1
                debugger.text=str(round(response_timer.getTime(),1))

            if response_timer.getTime()<0:
                break #force end of routine.

        debugger.text=str(condition_to_use)
    TextComponent debugger
      color = $[0.5,0.5,1]
      text = This is the debugger readout.
      pos = (0, 0.5)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent no_response
      color = red
      text = X
      startVal [condition] = $(False)
      letterHeight = 0.1
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  Routine gap
    TextComponent text_2
      text = +
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  LoopInitiator blocks loopType="TrialHandler"
    loopType = sequential
    nReps = 2
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    Routine blockstart
    LoopInitiator trials loopType="TrialHandler"
      loopType = sequential
      nReps = 5
      endPoints = [1, 2]
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      Routine itc_trial
      Routine gap
    LoopTerminator trials
  LoopTerminator blocks
  Routine thanks
