PsychoPy2experiment version="1.85.6"
Settings
  Monitor = testMonitor
  color = grey
  Experiment info = {u'participant': u'0', u'ntrials': u'60', u'kval': u'0.001', u'day': u'0', u'run_id': u'0'}
  Units = norm
  Save excel file = True
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  Data filename = u'data' + os.sep + '%s_%s' % (expInfo['participant'], expInfo['date'])
  expName = construal_itc_online2_stripped
  logging level = warning
  Screen = 1
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Routines
  Routine blockstart
    TextComponent text
      stopVal [duration (s)] = 6
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        The game is starting.

        Please choose one of the two options on the screen.

        You will have 5 seconds to make a decision.

        Please remain as still as possible.
  Routine block2intro
    TextComponent text_3
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        We'll show you another block now.

        be good!
  Routine thanks
    TextComponent thanksText
      color = $[1, 1, 1]
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      font = arial
      letterHeight = 0.1
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      text:
        This is the end of the experiment.

        Thanks!
  Routine itc_trial
    ImageComponent ImgChoice2Background
      stopVal [duration (s)] = 1.5
      pos = (0.5, 0)
      startVal [time (s)] = 0.0
      image = images/bluebg.png
      size = (0.3, 0.2)
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    ImageComponent ImgChoice1Background
      stopVal [duration (s)] = 1.5
      pos = (-0.5, 0)
      startVal [time (s)] = 0.0
      image [set every repeat] = images/redbg.png
      size = (0.3, 0.2)
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    TextComponent Delay1
      color [set every repeat] = white
      text [set every repeat] = SSdelay
      stopVal [duration (s)] = 1.5
      pos = (-0.5,-0.05)
      ori [set every repeat] = 0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent Delay2
      text [set every repeat] = LLdelay
      stopVal [duration (s)] = 1.5
      pos = (0.5,-0.05)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent Amount1
      text [set every repeat] = SSamount
      stopVal [duration (s)] = 1.5
      pos = (-0.5, 0.05)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent Amount2
      text [set every repeat] = LLamount
      stopVal [duration (s)] = 1.5
      pos = (0.5, 0.05)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent resp
      correctAns = "1"
      storeCorrect = True
      stopVal [duration (s)] = 1
      forceEndRoutine = True
      allowedKeys = "1","2"
      startVal [time (s)] = 0
      store = first key
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    TextComponent text_middle_line
      color = black
      text = |
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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  Routine gap
    TextComponent text_2
      color = black
      text = +
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  Routine blockstart
  Routine itc_trial
  Routine gap
  Routine block2intro
  Routine thanks
