PsychoPy2experiment version="1.85.6"
Settings
  Monitor = testMonitor
  color = black
  Experiment info = {u'delay': u'mydelay', u'amount': u'myamount', u'session': u'01', u'participant': u'', u'timeout': u'2'}
  Units = norm
  Save excel file = True
  Window size (pixels) = [1680, 1050]
  Full-screen window = True
  Data filename = u'data' + os.sep + '%s_%s' % (expInfo['participant'], expInfo['date'])
  expName = construal_itc_test
  logging level = warning
  Screen = 1
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Routines
  Routine blockstart
    TextComponent text
      text = Get ready for the new block!
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine thanks
    TextComponent thanksText
      color = $[1, 1, 1]
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      font = arial
      letterHeight = 0.1
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      text:
        This is the end of the experiment.

        Thanks!
  Routine itc_trial
    TextComponent Delay1
      text = First Delay
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent Delay2
      text = SecondDelay
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent Amount1
      text = $expInfo['amount']
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent Amount2
      text = $expInfo['amount']
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    PolygonComponent Choice1Background
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 1.0
      pos = (.2, 0.2)
      startVal [time (s)] = 0.0
      size = (0.1, 0.1)
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    PolygonComponent Choice2Background
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 1.0
      pos = (0.7, 0.7)
      startVal [time (s)] = 0.0
      size = (0.1, 0.1)
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    KeyboardComponent resp
      correctAns = "left"
      storeCorrect = True
      stopVal [duration (s)] = 1
      forceEndRoutine = True
      allowedKeys = "left","down","right"
      startVal [time (s)] = 0
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    PolygonComponent left_feedback
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 1.0
      pos = (0.2, 0.2)
      lineColor = $[0,0,0]
      startVal [condition] = len(theseKeys)>0
      size = (0.1,0.1)
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    PolygonComponent right_feedback
      opacity = 0
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 1.0
      pos = (0.7, 0.7)
      lineWidth = 5
      startVal [condition] = len(theseKeys)>0
      size = (0.1, 0.1)
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    CodeComponent process_response
      Each Frame:
        if resp.status == STARTED:
            if len(theseKeys)>0:
                if 'left' in theseKeys:
                    fb_obj=left_feedback
                elif 'right' in theseKeys:
                    fb_obj=right_feedback
                else:
                    raise Exception("Unhandled response key: " + str(theseKeys))

                fb_obj.setAutoDraw(True)
                fb_obj.status= STARTED
Flow
  LoopInitiator blocks loopType="TrialHandler"
    loopType = sequential
    nReps = 2
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    Routine blockstart
    LoopInitiator trials loopType="TrialHandler"
      loopType = random
      nReps = 5
      endPoints = [1, 2]
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      Routine itc_trial
    LoopTerminator trials
  LoopTerminator blocks
  Routine thanks
