PsychoPy2experiment version="1.85.6"
Settings
  Monitor = testMonitor
  Experiment info = {u'participant': u'1', u'session': u'1', u'k_M': u'0.001'}
  Units = use prefs
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  Data filename = u'data/%s_%s_%s' % (expInfo['participant'], expInfo['session'], expInfo['run'])
  expName = groundup-online-itc-construal29
  Screen = 1
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Routines
  Routine ITIfix2
    TextComponent tFix2
      color = black
      text = +
      startVal [time (s)] = 0
      letterHeight = 0.1
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    TextComponent tITIFix_begin_code2
      text [set every repeat] = $ITIFix_begin(2)
      stopVal [duration (s)] = 0
      startVal [time (s)] = 1
      letterHeight = 0.1
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  Routine rTaskInstructions
    TextComponent task_instructions
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        The game is starting.

        For the money dilemma task,
        please choose one of the two options on the screen.

        You will have 5 seconds to make a decision.

        If you are completing this in an fMRI scanner,
        please remain as still as possible.

        Press 1 or 2 to continue.
    TextComponent debugtext
      text [set every repeat] = $rTaskInstructionsClock.getTime()
      pos = (0, 0.5)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent respTaskInstructions
      forceEndRoutine = True
      allowedKeys = ['1','2']
      startVal [time (s)] = 0
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  Routine k_val
  Routine trial
    ImageComponent iOption1Background
      color [set every repeat] = $[1,1,1]
      stopVal [duration (s)] = 6
      pos = (-0.5, 0)
      startVal [time (s)] = 0.0
      image [set every repeat] = images/redbg.png
      size = (0.4, 0.3)
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    ImageComponent iOption2Background
      stopVal [duration (s)] = 6
      pos = (0.5, 0)
      startVal [time (s)] = 0.0
      image [set every repeat] = images/bluebg.png
      size = (0.4, 0.3)
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    TextComponent delay1
      color = black
      text [set every repeat] = $SSamount
      stopVal [duration (s)] = 6
      pos = (-0.5, -0.05)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent delay2
      color = black
      text [set every repeat] = $LLdelay
      stopVal [duration (s)] = 6
      pos = (0.5, -0.05)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent amount1
      color = black
      text [set every repeat] = $SSamount
      stopVal [duration (s)] = 6
      pos = (-0.5, 0.05)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent amount2
      color = black
      text [set every repeat] = $LLamount
      stopVal [duration (s)] = 6
      pos = (0.5, 0.05)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent divider
      color = black
      text = |
      stopVal [duration (s)] = 6
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    KeyboardComponent resp_trial
      forceEndRoutine = True
      allowedKeys = ['1','2']
      startVal [time (s)] = 0.0
      store = first key
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    TextComponent tRespondTooSlow
      color = black
      text = Respond faster!
      stopVal [duration (s)] = 1.0
      pos = (0, 0.3)
      startVal [condition] = $(showRespondFasterWarning)
      letterHeight = 0.1
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  Routine rBlockInstructions
    TextComponent tBlockInstructions
      text [set every repeat] = $PreTaskInstructions.replaceAll("\\n","\n")
      stopVal [duration (s)] = 10
      startVal [time (s)] = 0
      letterHeight = 0.1
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  Routine fMRI_pause
    TextComponent BeginMomentarily
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        There are two sets of instructions in this task.
        The first set of instructions relates to a categorization task.
        There is a correct answer.

        The second set of instructions is a money dilemma task.
        Your choices are entirely up to you.
        Your performance on the task will determine your payout,
        so you will need to pay close attention.

        The tasks will be staggered.
        In other words, you will see one of each at a time.
    KeyboardComponent resp_fMRI
      forceEndRoutine = True
      allowedKeys = ['5']
      startVal [time (s)] = 0.0
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    TextComponent tPressToContinue
      text = Press 5 to continue.
      pos = (0, -.9)
      startVal [condition] = $(expInfo['run'].toLowerCase().startsWith('p'))
      letterHeight = 0.1
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  Routine rTaskInterval
    TextComponent tFixSimple
      color = black
      text = +
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent tFixSimpleBeginCode
      text [set every repeat] = $on_rTaskIntervalFrame()
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine rTaskInterval2
    TextComponent tFixSimple2
      color = black
      text = +
      startVal [time (s)] = 0
      letterHeight = 0.1
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    TextComponent tFixSimpleBeginCode2
      color = black
      text = $on_rTaskIntervalFrame(2)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine construal_trial_b2_1
  Routine ITIfix
    TextComponent tFix
      color = black
      text = +
      startVal [time (s)] = 0
      letterHeight = 0.1
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    TextComponent tITIFix_begin_code
      text [set every repeat] = $ITIFix_begin()
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine finish_screen
    TextComponent finishfix
      color = black
      text = +
      stopVal [duration (s)] = 12
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent tKval
      color = black
      text [set every repeat] = $Math.round(k_val*Math.pow(10,4))/Math.pow(10,4)
      pos = (0, -0.6)
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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    TextComponent tThanks
      color = black
      text = Thank you for your participation.
      startVal [time (s)] = 12
      letterHeight = 0.1
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    TextComponent tWarning
      text [set every repeat] = $tGetWarningText()
      pos = (0, -0.8)
      startVal [time (s)] = 12
      letterHeight = 0.05
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    KeyboardComponent finish_screen_end_response
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 12
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  Routine rMetaInstructions
    TextComponent tMetaInstructions
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        There are two sets of instructions in this task.
        The first set of instructions relates to a categorization task.
        There is a correct answer.

        The second set of instructions is a money dilemma task.
        Your choices are entirely up to you.
        Your performance on the task will determine your payout,
        so you will need to pay close attention.

        The tasks will be staggered.
        In other words, you will see one of each at a time.

        Press 1 or 2 to continue.
    KeyboardComponent respMetaInstructions
      forceEndRoutine = True
      allowedKeys = ['1','2']
      startVal [time (s)] = 0.0
      store = first key
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  Routine construal_trial2
    TextComponent tConstrualQuestion2
      color = black
      text [set every repeat] = $Construal_QuestionText2
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent tConstrualAnswer2
      color = black
      text [set every repeat] = $Construal_AnswerText2
      stopVal [duration (s)] = 2.25
      startVal [time (s)] = 1.75
      letterHeight = 0.1
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    KeyboardComponent construal_resp2
      forceEndRoutine = True
      allowedKeys = ['1','2']
      startVal [time (s)] = 1.75
      store = first key
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    TextComponent yes1_2
      color = black
      stopVal [duration (s)] = 2.25
      pos = (-0.3,-0.3)
      startVal [time (s)] = 1.75
      letterHeight = 0.1
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      text:
        1
        Yes
    TextComponent no2_2
      color = black
      stopVal [duration (s)] = 2.25
      pos = (0.3,-0.3)
      startVal [time (s)] = 1.75
      letterHeight = 0.1
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      text:
        2
        No
  Routine rBlock2Instructions
  Routine rHowWhyTaskInstructions
    ImageComponent iHowWhyTaskInstructions
      startVal [time (s)] = 0.0
      image [set every repeat] = images/construal-stimuli/howwhytest_instructions.jpg
      size = (2.0,2.0)
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    KeyboardComponent respHowWhyTaskInstructions
      forceEndRoutine = True
      allowedKeys = ['1','2']
      startVal [time (s)] = 0.0
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  Routine construal_trial
    TextComponent tConstrualQuestion
      color = black
      text [set every repeat] = $Construal_QuestionText
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent tConstrualAnswer
      color = black
      text [set every repeat] = $Construal_AnswerText
      stopVal [duration (s)] = 2.25
      startVal [time (s)] = 1.75
      letterHeight = 0.1
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    KeyboardComponent construal_resp
      forceEndRoutine = True
      allowedKeys = ['1','2']
      startVal [time (s)] = 1.75
      store = first key
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    TextComponent yes1
      color = black
      stopVal [duration (s)] = 2.25
      pos = (-0.3, -0.3)
      startVal [time (s)] = 1.75
      letterHeight = 0.1
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      text:
        1
        Yes
    TextComponent no2
      color = black
      stopVal [duration (s)] = 2.25
      pos = (0.3, -0.3)
      startVal [time (s)] = 1.75
      letterHeight = 0.1
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      text:
        2
        No
  Routine trial2
    ImageComponent iOption1Background2
      stopVal [duration (s)] = 6
      pos = (-0.5, 0)
      startVal [time (s)] = 0.0
      image [set every repeat] = images/redbg.png
      size = (0.4, 0.3)
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    ImageComponent iOption2Background2
      stopVal [duration (s)] = 6
      pos = (0.5, 0)
      startVal [time (s)] = 0.0
      image = images/bluebg.png
      size = (0.4, 0.3)
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    TextComponent delay1_2
      color = black
      text [set every repeat] = $SSamount2
      stopVal [duration (s)] = 6
      pos = (-0.5,-0.05)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent delay2_2
      color = black
      text [set every repeat] = $LLdelay2
      stopVal [duration (s)] = 6
      pos = (0.5, -0.05)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent amount1_1
      color = black
      text = $SSamount2
      stopVal [duration (s)] = 6
      pos = (-0.5, 0.05)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent amount2_2
      color = black
      text = $LLamount2
      stopVal [duration (s)] = 6
      pos = (0.5, 0.05)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent divider2
      color = black
      text = |
      stopVal [duration (s)] = 6
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent resp_trial2
      forceEndRoutine = True
      allowedKeys = ['1','2']
      startVal [time (s)] = 0.0
      store = first key
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    TextComponent tRespondTooSlow2
      color = black
      letterHeight = 0.1
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      text:
        Any text

        including line breaks
  Routine beginRoutine
    TextComponent tLoading
      text = .......................
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine ITIfix_b2_1
Flow
  Routine beginRoutine
  Routine fMRI_pause
  LoopInitiator instructionLoop loopType="TrialHandler"
    conditionsFile = blockcontrol.csv
    isTrials = False
    loopType = sequential
    nReps = expInfo['run'].toLowerCase().startsWith('p')
    conditions = [{'DummyColumn': u'DummyTrial'}]
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    Routine rTaskInstructions
    Routine rHowWhyTaskInstructions
  LoopTerminator instructionLoop
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = $('design_csv_files/'+expInfo['designDir']+'/metaloop_sub[participant]d[session]r[run].csv'.replace("[participant]",expInfo['participant']).replace("[session]",expInfo['session']).replace("[run]",expInfo['run']))
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine rBlockInstructions
    LoopInitiator trials_set1 loopType="TrialHandler"
      conditionsFile = $(LoopFile.replace("[participant]",expInfo['participant']).replace("[session]",expInfo['session']))
      loopType = sequential
      nReps = 1
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      Routine ITIfix
      Routine construal_trial
      Routine rTaskInterval
      Routine trial
      Routine ITIfix2
      Routine construal_trial2
      Routine rTaskInterval2
      Routine trial2
    LoopTerminator trials_set1
  LoopTerminator blocks
  Routine finish_screen
