PsychoPy2experiment version="1.85.6"
Settings
  Monitor = testMonitor
  Experiment info = {'participant':'', 'session':'001'}
  Units = use prefs
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  expName = online-groundup
  Screen = 1
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Routines
  Routine block1intro
    TextComponent intro
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        The game is starting.

        Please choose one of the two options on the screen.

        You will have 5 seconds to make a decision.

        Please remain as still as possible.
  Routine itc_trial
    TextComponent asf
      text = ssDelay
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    ImageComponent myimg
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      image = images/redbg.png
      size = (0.5, 0.5)
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  Routine gap
    TextComponent text
      text = +
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  Routine block1intro
  Routine itc_trial
  Routine gap
