PsychoPy2experiment version="1.85.6"
Settings
  Monitor = testMonitor
  Experiment info = {'participant':'', 'session':'001'}
  Units = use prefs
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  expName = online-test
  Screen = 1
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Routines
  Routine trial
    ImageComponent image
      color = $[1,0.8,0.8]
      stopVal [duration (s)] = 1.0
      pos = (0, 0.5)
      startVal [time (s)] = 0.0
      image [set every repeat] = cheshire.png
      size = (0.3, 0.6)
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    TextComponent textbox
      text [set every repeat] = $letterColor
      stopVal [duration (s)] = 1.0
      pos = (0, -0.5)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_2
      correctAns = $corrAns
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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  Routine fix
    TextComponent text_3
      color = $[1,1,0]
      text [set every repeat] = +
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine instr2
    TextComponent text_4
      text = This is an additional routine preceding a loop.
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.2
      letterHeight = 0.1
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  Routine instr
    TextComponent text_2
      text = I want to see how much we can put online. Lets try it out!
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  Routine instr
  Routine instr2
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trialTypes.csv
    loopType = random
    nReps = 5
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    conditions:
      [{'text': u'red', 'congruent': 1, 'corrAns': u'left', 'letterColor': u'red'},
      {'text': u'red', 'congruent': 0, 'corrAns': u'down', 'letterColor': u'green'},
      {'text': u'green', 'congruent': 1, 'corrAns': u'down', 'letterColor': u'green'},
      {'text': u'green', 'congruent': 0, 'corrAns': u'right', 'letterColor': u'blue'},
      {'text': u'blue', 'congruent': 1, 'corrAns': u'right', 'letterColor': u'blue'},
      {'text': u'blue', 'congruent': 0, 'corrAns': u'left', 'letterColor': u'red'}]
    Routine trial
    Routine fix
  LoopTerminator trials
